CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Upload folder containing focused slice and masks for mCherry (will throw out stacks made for CellPose since they contain C3 channel i.e. Hoescht which is not under analysis). Input a single folder as mulitple folder may create an issue in making sets of images.', '', 'You may have to remove first field of view images as the formula need a number after "Andor" in file name or correct it to Andor_0', 'BG correction algorithm per image basis:', 'i) identify objects (e.g. cells)', '(ii) compute the median or lower quartile intensity of all pixels intensities OUTSIDE any objects (it is even safer to dilate the objects before doing this in order to ensure that one really only takes background pixels). I am doing 75% percentile of the background region. ', '(iii) subtract this value from the entire image. ', '', 'Also get rid of lysosomal mcherry foci since YFP denatures inside', '']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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "txt")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channel": "integer", "Date1": "text", "FileLocation": "text", "Frame": "text", "Plate": "text", "Series": "text", "Site": "text", "Well": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_C(?P<Channel>[0-9])-(?P<Well>[A-Za-z][0-9]{1,2})_(?P<Date1>.*)_Pushkal_(?P<Site>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "1") (file doesnot endwith "cp_masks.tif")
    Name to assign these images:mCherry
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "cp_masks.tif")
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    Name to assign these objects:Masks_mCherry
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MedianFilter:[module_num:5|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notes:['Median filter dilates the objects before doing this in order to ensure that one really only takes background pixels']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
    Select the input image:mCherry
    Name the output image:MedianFiltered_mCherry
    Window:10

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify cell region (will be masked from the image to find the background region)']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
    Select the input image:MedianFiltered_mCherry
    Name the primary objects to be identified:Cytoplasm_for_BG_Correction
    Typical diameter of objects, in pixel units (Min,Max):70,800
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:7|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notes:['Mask all cells identified by previous module']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
    Select the input image:YFP
    Name the output image:Background_region_YFP
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm_for_BG_Correction
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    Invert the mask?:Yes

MaskImage:[module_num:8|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
    Select the input image:mCherry
    Name the output image:Background_region_mCherry
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm_for_BG_Correction
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:9|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notes:['Measurement of the 75% percentile in the background region (cells have been masked so will be 0, does not affect the median). ']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
    Select images to measure:Background_region_YFP, Background_region_mCherry
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:75

ImageMath:[module_num:10|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notes:['Background corrected image']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BG_corrected_YFP
    Image or measurement?:Image
    Select the first image:YFP
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:ILLY_Corrected_BG_YFP
    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_75_Background_region_YFP

ImageMath:[module_num:11|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notes:['Background corrected image']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BG_corrected_mCherry
    Image or measurement?:Image
    Select the first image:mCherry
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:ILLY_Corrected_BG_YFP
    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_75_Background_region_mCherry

EnhanceOrSuppressFeatures:[module_num:12|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
    Select the input image:BG_corrected_mCherry
    Name the output image:mCherry_enhanced_foci
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:mCherry_enhanced_foci
    Name the primary objects to be identified:mCherry_foci
    Typical diameter of objects, in pixel units (Min,Max):4,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Otsu

MaskImage:[module_num:14|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
    Select the input image:BG_corrected_mCherry
    Name the output image:mCherry_without_foci
    Use objects or an image as a mask?:Objects
    Select object for mask:mCherry_foci
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    Invert the mask?:Yes

MaskImage:[module_num:15|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
    Select the input image:BG_corrected_YFP
    Name the output image:YFP_without_foci
    Use objects or an image as a mask?:Objects
    Select object for mask:mCherry_foci
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    Invert the mask?:Yes

RelateObjects:[module_num:16|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enabled:False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
    Parent objects:Masks_mCherry
    Child objects:mCherry_foci
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:Masks_mCherry
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:18|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notes:['Measure YFP and mCherry signal per cell']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
    Select images to measure:YFP_without_foci, mCherry_without_foci
    Select objects to measure:Masks_mCherry

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\everest\\jain_imaging\\Pushkal\\20250302_Sensor_temporal_old_media
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Masks_mCherry|Intensity_IntegratedIntensity_mCherry_without_foci,Masks_mCherry|Intensity_IntegratedIntensity_YFP_without_foci,Masks_mCherry|AreaShape_Area,Masks_mCherry|Number_Object_Number,Experiment|Pipeline_Pipeline
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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