CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Upload folder containing two-channel stacks (time series) in tif format', '', 'https://github.com/CellProfiler/tutorials/tree/master/3d_monolayer']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
    Filter images?:Custom
    Select the rule criteria:and (file doesnot contain "_D_") (file doesnot contain "scanprotocol")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^G_(?P<Well>[A-Za-z][0-9]{1,2})_(?P<Plate>.*)_Pushkal_2_F(?P<Site>[0-9]{1,2}).tif_t(?P<Time>[0-9]{1,3})_c(?P<Channel>[0-9]{1,3}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "001")
    Name to assign these images:miRFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "002")
    Name to assign these images:mCherry
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MedianFilter:[module_num:5|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notes:['Median filter dilates the objects before doing this in order to ensure that one really only takes background pixels']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
    Select the input image:mCherry
    Name the output image:MedianFiltered_mCherry
    Window:40

EnhanceEdges:[module_num:6|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
    Select the input image:MedianFiltered_mCherry
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
ErodeImage:[module_num:7|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
    Select the input image:MedianFiltered_mCherry
    Name the output image:ErodeImage
    Structuring element:disk,5

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:MedianFiltered_mCherry
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):50,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:9|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
    Select the input image:miRFP
    Name the output image:Background_region_miRFP
    Use objects or an image as a mask?:Objects
    Select object for mask:Nucleus
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    Invert the mask?:Yes

MaskImage:[module_num:10|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
    Select the input image:mCherry
    Name the output image:Background_region_mCherry
    Use objects or an image as a mask?:Objects
    Select object for mask:Nucleus
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:11|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
    Select images to measure:Background_region_mCherry, Background_region_miRFP
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:50

ImageMath:[module_num:12|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BG_corrected_miRFP
    Image or measurement?:Image
    Select the first image:miRFP
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_50_Background_region_miRFP

ImageMath:[module_num:13|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BG_corrected_mCherry
    Image or measurement?:Image
    Select the first image:mCherry
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_50_Background_region_mCherry

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:Nucleus
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:BG_corrected_mCherry, BG_corrected_miRFP
    Select objects to measure:Nucleus

TrackObjects:[module_num:16|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
    Choose a tracking method:Overlap
    Select the objects to track:Nucleus
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    Maximum pixel distance to consider matches:40
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:Tracked_Nuclei
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    Filter objects by lifetime?:No
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BG_corrected_mCherry
    Name the output image:OutlineImage
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nucleus

Tile:[module_num:18|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
    Select an input image:BG_corrected_mCherry
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:OutlineImage
    Select an additional image to tile:Tracked_Nuclei

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:mCherry
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\degron pipeline\\tiled_images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\degron pipeline\\tiled_images
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nucleus|AreaShape_Area,Nucleus|Intensity_IntegratedIntensity_BG_corrected_mCherry,Nucleus|Intensity_IntegratedIntensity_BG_corrected_miRFP,Nucleus|Location_CenterMassIntensity_Y_BG_corrected_mCherry,Nucleus|Location_CenterMassIntensity_Y_BG_corrected_miRFP,Nucleus|Location_CenterMassIntensity_Z_BG_corrected_miRFP,Nucleus|Location_CenterMassIntensity_Z_BG_corrected_mCherry,Nucleus|Location_CenterMassIntensity_X_BG_corrected_miRFP,Nucleus|Location_CenterMassIntensity_X_BG_corrected_mCherry,Nucleus|Location_MaxIntensity_X_BG_corrected_miRFP,Nucleus|Location_MaxIntensity_X_BG_corrected_mCherry,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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